<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: OptimetConoprobe + NDI Aurora tracker"
      Description="Sample file for using the ConoProbeConnector module with an optical tracker."
    />
    
    <Device
      Id="MeasurerDevice" 
      Type="OptimetConoProbe"
      ToolReferenceFrame="Measurer"
      LocalTimeOffsetSec="0"
      AcquisitionRate="100"
      LensOriginAlignment="1.0 1.0 1.0 0.0 0.0 0.0"
      DelayBetweenMeasurements="1" 
      Frequency="100" 
      CoarseLaserPower="13"
      FineLaserPower="0">
      <DataSources>
        <DataSource Type="Tool" Id="Measurement" PortName="Measurement" />
        <DataSource Type="Tool" Id="Parameters" PortName="Parameters" />        
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="MeasurerStream">
          <DataSource Id="Measurement" />
          <DataSource Id="Parameters" />
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="TrackerDevice" 
      Type="AuroraTracker"
      SerialPort="4"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="RigidBody" PortName="0" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="RigidBody" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>
  
    <Device 
      Id="TrackedMeasurerDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="MeasurerStream" />
        <InputChannel Id="TrackerStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedMeasurerStream"/>
      </OutputChannels>
    </Device>
    
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackedMeasurerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="RigidBodyToTracker" />
        <Transform Name="MeasurementToMeasurer" />
        <Transform Name="ParametersToMeasurer" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
